PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = similarity
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    CodeComponent code1
      Begin Routine:
        conta = conta +1

        d1 = mipar[conta][0]

        d2 = mipar[conta][1]
    TextComponent text
      text [set every repeat] = hh
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine items_2
    CodeComponent code_2
      Begin Routine:
        conta = conta + 1

        defin = lista_def[conta]

        thisExp.addData("concepto", defin)
    TextComponent text_2
      text [set every repeat] = $defin
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_1
      pos = 0, -0.4
      high = 100
      startVal [time (s)] = 0.0
      disappear = True
      size = 1.0
      forceEndRoutine = False
      low = 0
      scaleDescription = ¿Es un concepto poco ('0') o muy aceptable socialmente ('100')?
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    RatingScaleComponent rating_2
      pos = 0, -0.4
      high = 100
      startVal [condition] = rating_1.status==FINISHED
      size = 1.0
      forceEndRoutine = True
      low = 0
      scaleDescription = ¿Es un concepto poco ('0') o muy emocional ('100')?
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  Routine prepare
    CodeComponent code_1
      Begin Experiment:
        import pandas as pd

        datos = pd.read_csv('/Users/danalclop/Desktop/ls.csv', header = 0)

        lista_def = datos['DEFINITION'].tolist()

        conta = -1
Flow
  Routine prepare
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 630
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    Routine items_2
  LoopTerminator trials
